// Example protocol demonstrating the use of the Sample function
protocol Sample

// we need to import the wtype package to use the LHComponent type
// the mixer package is required to use the Sample function
import (
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/antha/anthalib/mixer"
)


// Input parameters for this protocol (data)
Parameters (
	// antha, like golang is a strongly typed language in which the type of a variable must be declared
	// in this case we're creating a variable called SampleVolume which is of type Volume
	// the type system allows the antha compiler to catch many types of common errors before the programme is run
	// the antha type system extends this to biological types such as volumes here.
	// functions require inputs of particular types to be adhered to
	SampleVolume Volume 
)

// Data which is returned from this protocol, and data types
Data (
	
)


// Physical Inputs to this protocol with types
Inputs (
	// the LHComponent is the principal liquidhandling type in antha
	// the * signifies that this is a pointer to the actual component rather than the component itself
	// most key antha functions such as Sample and Mix use *LHComponent rather than LHComponent
	// since the type is imported from the wtype package we need to use  *wtype.LHComponent rather than simply *LHComponent
	Solution *wtype.LHComponent
)

// Physical outputs from this protocol with types
Outputs (
	Sample *wtype.LHComponent
)

Requirements {
	
}

// Conditions to run on startup
Setup {
	
}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {
	
	// The Sample function is imported from the mixer library
	// It's used to take a sample of a specified volume of a component prior to mixing
	// in the mixer library the function signature can be found, here it is:
	// func Sample(l *wtype.LHComponent, v wunit.Volume) *wtype.LHComponent {
	// The function signature  shows that the function requires a *LHComponent and a Volume and returns an *LHComponent	
	Sample = mixer.Sample(Solution,SampleVolume)
	 
	// Now move on to part B_SampleAll.an to see the next type of Sample function
	
}
// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed 
//correctly. Optionally, destructive tests can be performed to validate 
//results on a dipstick basis
Validation {
	
}
