protocol GeneDesign_seq

import (
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/enzymes"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/enzymes/lookup"
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/export"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/sequences"
	//"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/sequences/entrez"
	"strconv"
	"fmt"
)

Parameters (
	Parts []string // dna sequences as strings "ACTTGCGTC","GGTCCA"
	Vector string // dna sequence as string
	ConstructName string // name you want to give your construct
	RE string // typeIIs restriction enzyme name
	EndsAlreadyAdded bool // have the typeIIs assembly ends been added already? true/false
	SynthesisProvider string // name of synthesis provider e.g. GenScript
	ExporttoFastaFile bool // Whether or not you want to export the sequences generated to a fasta file
)
Data (

	// output parts with correct overhangs
	PartsWithOverhangs []wtype.DNASequence
	SimulationStatus string
	Validated bool
	ValidationStatus string
)

Inputs (
)

Outputs (
)

Requirements {
}

Setup {
} 

Steps {
	PartDNA := make([]wtype.DNASequence, 0)
	
	// make DNASequence type from sequence
	for i, part := range Parts {
		DNA := wtype.MakeLinearDNASequence("part" + strconv.Itoa(i),part)
		PartDNA = append(PartDNA,DNA)
	}
	
	// make vector sequence
	VectorSeq := wtype.MakePlasmidDNASequence("Vector",Vector)

	// Look up the restriction enzyme
	EnzymeInf, _ := lookup.TypeIIsLookup(RE)
	
	// Add overhangs
	if EndsAlreadyAdded {
		PartsWithOverhangs = PartDNA
	}else {
	PartsWithOverhangs = enzymes.MakeScarfreeCustomTypeIIsassemblyParts(PartDNA, VectorSeq, EnzymeInf)
	}
	
	// validation
	assembly := enzymes.Assemblyparameters{ConstructName, RE, VectorSeq, PartsWithOverhangs}
	SimulationStatus, _, _, _, _ = enzymes.Assemblysimulator(assembly)
	
	
	// check if sequence meets requirements for synthesis
	ValidationStatus, Validated = sequences.ValidateSynthesis(PartsWithOverhangs, Vector, SynthesisProvider)
	
	// export sequence to fasta
	if ExporttoFastaFile {
	export.Makefastaserial2(ConstructName, PartsWithOverhangs)
	}
	
	fmt.Println("Parts Source: ",PartsWithOverhangs)
}
	
Analysis {
	
} 

Validation {

}

