// This protocol is intended to design assembly parts using a specified enzyme. 
// overhangs are added to complement the adjacent parts and leave no scar. 
// parts can be entered as genbank (.gb) files, sequences or biobrick IDs
// If assembly simulation fails after overhangs are added. In order to help the user
// diagnose the reason, a report of the part overhangs 
// is returned to the user along with a list of cut sites in each part.

protocol CombinatorialLibraryDesign_Scarfree3Part_wtype

import (
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/sequences/oligos"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/export"
	"path/filepath"
	"strconv"
	"fmt"
)

// Input parameters for this protocol (data)
Parameters (
	EnzymeName 					string
	ProjectName					string
	Vectors						[]wtype.DNASequence
	Part1s						[]wtype.DNASequence
	Part2s						[]wtype.DNASequence
	Part3s						[]wtype.DNASequence
	SitesToRemove				[]string
	ORFStoconfirm				[]string
	BlastSearchSeqs				bool
	EndsAlreadyadded 			bool
	RemoveproblemRestrictionSites bool
	FolderPerConstruct		bool
	FolderPerProject			bool
)

// Physical Inputs to this protocol with types
Inputs (

)

// Physical outputs from this protocol with types
Outputs (
	
)

// Data which is returned from this protocol, and data types
Data (
	StatusMap map[string]string
	PartswithOverhangsMap map[string][]wtype.DNASequence // parts to order
	PassMap map[string]bool
	SeqsMap map[string]wtype.DNASequence // desired sequence to end up with after assembly
	Sequences []wtype.DNASequence
	Parts[][]wtype.DNASequence
	EndreportMap  map[string]string
	PositionReportMap  map[string][]string
	PrimerMap map[string]oligos.Primer
	
)
// Input Requirement specification
Requirements {
	// e.g. are MoClo types valid?
}

// Conditions to run on startup
Setup {}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {
	StatusMap = make(map[string]string)
	PartswithOverhangsMap = make(map[string][]wtype.DNASequence) // parts to order
	PassMap = make(map[string]bool)
	SeqsMap = make(map[string]wtype.DNASequence) // desired sequence to end up with after assembly
	Sequences = make([]wtype.DNASequence,0)
	Parts = make([][]wtype.DNASequence,0)
	EndreportMap  = make(map[string]string)
	PositionReportMap = make(map[string][]string)
	StatusMap = make(map[string]string)
	PrimerMap = make(map[string]oligos.Primer)
	
	var counter int = 1
	
	for j := range Vectors {
		for k := range Part1s {
			for l := range Part2s {
				for m := range Part3s {	
					
						key := 	ProjectName+"_"+"Vector"+strconv.Itoa(j+1)+"_1."+strconv.Itoa(k+1)+"_2."+strconv.Itoa(l+1)+"_3."+strconv.Itoa(m+1)
						assembly := RunSteps(Scarfree_siteremove_orfcheck_wtype,
		Parameters {
					Constructname: 				key,
					Seqsinorder:				[]wtype.DNASequence{Part1s[k],Part2s[l],Part3s[m]},
					Enzymename:					EnzymeName,
					Vector:						Vectors[j],
					OtherEnzymeSitesToRemove:	SitesToRemove,
					ORFstoConfirm:				ORFStoconfirm, // enter each as amino acid sequence
					RemoveproblemRestrictionSites: RemoveproblemRestrictionSites,
					EndsAlreadyadded:			EndsAlreadyadded,
					ExporttoFastaFile: 			FolderPerConstruct,
					BlastSeqswithNoName:		BlastSearchSeqs,
				
		}, Inputs{
                    
                })
				key = key  //+ Vectors[j]
				PartswithOverhangsMap[key] = assembly.Data.PartswithOverhangs // parts to order
				PassMap[key] = assembly.Data.Simulationpass
				EndreportMap[key]  = assembly.Data.Endreport
				PositionReportMap[key] = assembly.Data.PositionReport
				SeqsMap[key] = assembly.Data.NewDNASequence
				Sequences = append(Sequences,assembly.Data.NewDNASequence)
				Parts = append(Parts,assembly.Data.PartswithOverhangs)
				StatusMap[key] = assembly.Data.Status
				
	// for each vector we'll also design sequencing primers
	
	primer := RunSteps(PrimerDesign_FWD_wtype,
	Parameters {
				FullDNASeq:Vectors[j], // design sequencing primers in original vector assembly.Data.NewDNASequence,
				Maxtemp:    wunit.NewTemperature(60,"C"),
				Mintemp:    wunit.NewTemperature(50,"C"),
				Maxgc:    0.6,
				Minlength:   15, 
				Maxlength:  30, 
				Seqstoavoid: []string{},
				PermittednucleotideOverlapBetweenPrimers: 10, // number of nucleotides which primers can overlap by
				RegionSequence: wtype.MakeLinearDNASequence("PartofSacBPromoter","gatattatgatattttctgaattgtgattaaaaaggcaactttatgcccatgcaacagaaactataaaaaatacagagaatgaaaagaaacagatagattttttagttctttaggcccgtagtctgcaaatccttttatgattttctatcaaacaaaagaggaaaatagaccagttgcaatccaaacgagagtctaatagaatgaggtcgaaaagtaaatcgcgcgggtttgttactgataaagcaggcaagacctaaaatgtgtaaagggcaaagtgtatactttggcgtcaccccttacatattttaggtctttttttattgtgcgtaactaacttgccatcttcaaacaggagggctggaagaagcagaccgctaacacagtaca"), // SacB promoter sequence in vector //PartsWithSitesRemoved[0], // first part
				FlankTargetSequence:true,
	}, Inputs{
                    
                })
				PrimerMap[key]=primer.Data.FWDPrimer
				
				
				counter++
	
	}
	}
	}
	// export sequence to fasta
	if FolderPerProject{
		
		// export simulated assembled sequences to file
		export.Makefastaserial2(export.LOCAL,filepath.Join(ProjectName,"AssembledSequences"), Sequences)
		
		// add fasta files of all parts with overhangs 
		labels:= []string{"Device1","Device2","Device3"}
		for j := range labels {
		for i := range Parts{
		fmt.Println(i,len(labels),len(Parts))
		export.Makefastaserial2(export.LOCAL,filepath.Join(ProjectName,labels[j]), Parts[i])
		}
		}
	}
	
	}
}

// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {
}
