// This protocol is intended to design assembly parts using a specified enzyme. 
// overhangs are added to complement the adjacent parts and leave no scar. 
// parts can be entered as genbank (.gb) files, sequences or biobrick IDs
// If assembly simulation fails after overhangs are added. In order to help the user
// diagnose the reason, a report of the part overhangs 
// is returned to the user along with a list of cut sites in each part.

protocol Scarfree_design

import (
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"fmt"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/enzymes"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/Parser"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/sequences"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/enzymes/lookup"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/igem"
	"strconv"
	"strings"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/text"

)

// Input parameters for this protocol (data)
Parameters (
	Constructname 			string
	Seqsinorder				[]string
	Vector					string
	Enzymename				string
	ORFstoConfirm			[]string // enter each as amino acid sequence
	EndsAlreadyadded bool
)

// Physical Inputs to this protocol with types
Inputs (

)

// Physical outputs from this protocol with types
Outputs (
	
)

// Data which is returned from this protocol, and data types
Data (
	Warnings error
	Status string
	Simulationpass bool
	PartswithOverhangs []wtype.DNASequence // parts to order
	NewDNASequence wtype.DNASequence // desired sequence to end up with after assembly
	ORFmissing bool
)
// Input Requirement specification
Requirements {
	// e.g. are MoClo types valid?
}

// Conditions to run on startup
Setup {}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {
	//var msg string
	// set warnings reported back to user to none initially
	warnings := make([]string,0)
	
	var warning string
	var err error
	// make an empty array of DNA Sequences ready to fill
	partsinorder := make([]wtype.DNASequence,0)
	
	var partDNA wtype.DNASequence
	var vectordata wtype.DNASequence
	
	for i, part := range Seqsinorder {
		if strings.Contains(part, ".gb") && strings.Contains(part, "Feature:") {

			split := strings.SplitAfter(part, ".gb")
			file := split[0]

			split2 := strings.Split(split[1], ":")
			feature := split2[1]

			partDNA, _ = parser.GenbankFeaturetoDNASequence(file, feature)
		} else if strings.Contains(part, ".gb") {

			/*annotated,_ := parser.GenbanktoAnnotatedSeq(part)
			partDNA = annotated.DNASequence */

			partDNA, _ = parser.GenbanktoAnnotatedSeq(part)
		} else {

			if strings.Contains(part, "BBa_") {
				part = igem.GetSequence(part)
			}
			partDNA = wtype.MakeLinearDNASequence("Part "+strconv.Itoa(i), part)
		}
		partsinorder = append(partsinorder, partDNA)
	}
	
	// make vector into an antha type DNASequence
	
		if strings.Contains(Vector, ".gb") {
	
			vectordata, _ = parser.GenbanktoAnnotatedSeq(Vector)
			vectordata.Plasmid = true
		}else {
		
		if strings.Contains(Vector, "BBa_") {
			Vector = igem.GetSequence(Vector)
			
		}
		vectordata = wtype.MakePlasmidDNASequence("Vector",Vector)
		}
	
	//lookup restriction enzyme
	restrictionenzyme,err := lookup.TypeIIsLookup(Enzymename) 
	if err != nil {
		warnings = append(warnings,text.Print("Error", err.Error()))
	}
		
	//  Add overhangs for scarfree assembly based on part seqeunces only, i.e. no Assembly standard

	//PartswithOverhangs = enzymes.MakeScarfreeCustomTypeIIsassemblyParts(partsinorder, vectordata, restrictionenzyme)
	
	if EndsAlreadyadded {
		PartswithOverhangs = partsinorder
	} else {PartswithOverhangs = enzymes.MakeScarfreeCustomTypeIIsassemblyParts(partsinorder, vectordata, restrictionenzyme)
	}
	
	// Check that assembly is feasible with designed parts by simulating assembly of the sequences with the chosen enzyme
	assembly := enzymes.Assemblyparameters{Constructname, restrictionenzyme.Name,vectordata,PartswithOverhangs}
		status,numberofassemblies,_,newDNASequence, err := enzymes.Assemblysimulator(assembly)
	
	endreport := "Endreport only run in the event of assembly simulation failure"
	//sites := "Restriction mapper only run in the event of assembly simulation failure"
	NewDNASequence = newDNASequence
	if err == nil && numberofassemblies == 1 {

		Simulationpass = true
	} else {

		warnings = append(warnings, status)
		// perform mock digest to test fragement overhangs (fragments are hidden by using _, )
		_, stickyends5, stickyends3 := enzymes.TypeIIsdigest(vectordata, restrictionenzyme)

		allends := make([]string, 0)
		ends := ""

		ends = text.Print(vectordata.Nm+" 5 Prime end: ", stickyends5)
		allends = append(allends, ends)
		ends = text.Print(vectordata.Nm+" 3 Prime end: ", stickyends3)
		allends = append(allends, ends)

		for _, part := range PartswithOverhangs {
			_, stickyends5, stickyends3 := enzymes.TypeIIsdigest(part, restrictionenzyme)
			ends = text.Print(part.Nm+" 5 Prime end: ", stickyends5)
			allends = append(allends, ends)
			ends = text.Print(part.Nm+" 3 Prime end: ", stickyends3)
			allends = append(allends, ends)
		}
		endreport = strings.Join(allends, " ")
		warnings = append(warnings, endreport)
	}

	// check number of sites per part !

	sites := make([]int, 0)
	multiple := make([]string, 0)
	
	enz := lookup.EnzymeLookup(Enzymename)
	for _, part := range PartswithOverhangs {

		info := enzymes.Restrictionsitefinder(part, []wtype.RestrictionEnzyme{enz})

		sitepositions := enzymes.SitepositionString(info[0])

		sites = append(sites, info[0].Numberofsites)
		sitepositions = text.Print(part.Nm+" "+Enzymename+" positions:", sitepositions)
		multiple = append(multiple, sitepositions)
	}
	
	for _,orf := range ORFstoConfirm {
		if sequences.LookforSpecificORF(NewDNASequence.Seq,orf) == false {
			warning = text.Print("orf not present: ", orf)
			warnings = append(warnings,warning)
			ORFmissing = true
		}
	}
	
	if len(warnings) == 0 {
		warnings = append(warnings,"none")
	}
	Warnings = fmt.Errorf(strings.Join(warnings,";"))
	
	partsummary := make([]string,0)
	for _, part:= range PartswithOverhangs {
		partsummary =append(partsummary, text.Print(part.Nm,part.Seq))
	}
	
	partstoorder := text.Print("PartswithOverhangs: ", partsummary)
	
	
	
	// Print status
	if Status != "all parts available"{
		Status = fmt.Sprintln(Status)
	} else {Status = fmt.Sprintln(
		text.Print("simulator status: ", status),
		text.Print("Endreport after digestion: ",endreport),
		text.Print("Sites per part for " + Enzymename, sites),
		text.Print("Positions: ", multiple),
		text.Print("Warnings:", Warnings.Error()),
		text.Print("Simulationpass=", Simulationpass),
		text.Print("NewDNASequence: ",NewDNASequence),
		text.Print("Any Orfs to confirm missing from new DNA sequence:", ORFmissing),
		partstoorder,
		)
	}
	
}

// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {
}
