// example of how to look up molecule properties from pubchem 
protocol LookUpMolecule
 
import (
	"fmt"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/Pubchem"
)
Parameters (
	// Name of compound or array of multiple compounds
	Compound string
	Compoundlist []string
)
Data (
	
	// molecule type is returned consisting of name, formula, molecular weight and chemical ID (CID)
	Compoundprops pubchem.Molecule
	List []pubchem.Molecule
	
	// or JSON structure if preferred
	Jsonstring string
	
	// status to be printed out in manual driver console
	Status string
	
)
Inputs (
)
Outputs (
)
Requirements {
}
Setup {
} 
Steps {
	
	// method of making molecule from name
	Compoundprops = pubchem.MakeMolecule(Compound)
	
	// or returning properties in JSON structure
	Jsonstring = pubchem.Compoundproperties(Compound)
	
	// method of making a list of compounds from names
	List = pubchem.MakeMolecules(Compoundlist)
	
	// Print out status 
	Status = fmt.Sprintln("Returned data from", 
	Compound, "=", 
	Compoundprops.Moleculename, 
	Compoundprops.MolecularWeight, 
	Compoundprops.MolecularFormula, 
	Compoundprops.CID,
	"Data in JSON format =", Jsonstring,
	"List=",List)
	}
Analysis {
	
} 

Validation {
	
}

