protocol ScreenLHPolicies_Awesome

import (
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/antha/anthalib/wutil"
	"github.com/antha-lang/antha/antha/anthalib/mixer"
	"github.com/antha-lang/antha/microArch/driver/liquidhandling"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/image"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/doe"
	"path/filepath"
	antha "github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/AnthaPath"
	"fmt"
	"strconv"
)


// Input parameters for this protocol (data)
Parameters (
	TotalVolume Volume
	TestSolVolumes []Volume
	NumberofReplicates int
	Printasimage bool
	Imagefilename string
	NumberofBlanks int
	LHDOEFile string
	DXORJMP string
	OutputFilename string

)

// Data which is returned from this protocol, and data types
Data (
	Runtowelllocationmap map[string]string //[]string //map[string]string
	Runcount int
	Pixelcount int
	Errors []error
	Blankwells []string
	Runs []doe.Run
	//NeatSamplewells []string 
)


// Physical Inputs to this protocol with types
Inputs (
	TestSols []*wtype.LHComponent
	Diluent *wtype.LHComponent
	OutPlate *wtype.LHPlate
)

// Physical outputs from this protocol with types
Outputs (
	Reactions []*wtype.LHComponent
)

Requirements {
}

// Conditions to run on startup
Setup {
}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {
	
	
	
	// validate presence of doe design file in anthapath
	if antha.Anthafileexists(LHDOEFile) == false {
		fmt.Println("This DOE file ", LHDOEFile, " was not found in anthapath ~.antha. Please move it there, change file name and type in antha-lang/antha/microarch/driver/makelhpolicy.go and recompile antha to use this liquidhandling doe design")
		fmt.Println("currently set to ", liquidhandling.DOEliquidhandlingFile, " type ", liquidhandling.DXORJMP)
		}else{
		fmt.Println("found lhpolicy doe file", LHDOEFile)
	}
	
	
	
	// declare some global variables for use later
	var rotate = false
	var autorotate = true
	var wellpositionarray = make([]string, 0)
	var perconditionuntowelllocationmap = make([]string,0)
	var alphabet = wutil.MakeAlphabetArray() 
	Runtowelllocationmap = make(map[string]string)
	Blankwells = make([]string,0)
	counter := 0
	var platenum = 1
	// work out plate layout based on picture or just in order
	
	if Printasimage {
	chosencolourpalette := image.AvailablePalettes["Palette1"]
	positiontocolourmap, _,_ := image.ImagetoPlatelayout(Imagefilename, OutPlate, &chosencolourpalette, rotate,autorotate) 
	
	//Runtowelllocationmap = make([]string,0)
	
	for location, colour := range positiontocolourmap {
		R,G,B,A := colour.RGBA()
	
		if uint8(R) == 242 && uint8(G) ==243 && uint8(B) == 242 && uint8(A) == 255 {
			continue
			}else {wellpositionarray = append(wellpositionarray,location)
		}
	}
	
	}else{
			
		for j := 0; j < OutPlate.WlsX; j++ {
		for i := 0; i < OutPlate.WlsY; i++ { //countingfrom1iswhatmakesushuman := j + 1
			//k = k + 1
			wellposition := string(alphabet[i]) + strconv.Itoa(j+1)
			//fmt.Println(wellposition, k)
			wellpositionarray = append(wellpositionarray, wellposition)
		}
		
	}
	}
	reactions := make([]*wtype.LHComponent,0)
	
	//policies, names := liquidhandling.PolicyMaker(liquidhandling.Allpairs, "DOE_run",false)
	
	//intfactors := []string{"Pre_MIX","POST_MIX"}
	_, names, runs, err := liquidhandling.PolicyMakerfromDesign(DXORJMP,LHDOEFile, "DOE_run")
	if err != nil{
		panic(err)
	}
	
	//newruns := make([]doe.Run,len(runs))
	
	
	for l := 0; l < len(TestSolVolumes); l++ {
	for k := 0; k< len(TestSols);k++{
	for j:= 0; j< NumberofReplicates;j++{
	for i := 0; i < len(runs); i++ {
		
		
		if counter==((OutPlate.WlsX*OutPlate.WlsY)+NumberofBlanks){
			fmt.Println("plate full, counter = ", counter)
			platenum++
			counter = 0
		}
		
		//eachreaction := make([]*wtype.LHComponent, 0)
		
		// keep default policy for diluent
		//Diluent.Type = names[i]
		//fmt.Println(Diluent.Type)
		
		
		// diluent first
		bufferSample := mixer.SampleForTotalVolume(Diluent, TotalVolume)
		//eachreaction = append(eachreaction,bufferSample)
		
		solution := MixTo(OutPlate.Type, wellpositionarray[counter],platenum,bufferSample)
		
		// now test sample
		
		// change liquid class
		TestSols[k].Type = wtype.LiquidTypeFromString(names[i])
		
		//sample
		testSample := mixer.Sample(TestSols[k], TestSolVolumes[l])
		
		//eachreaction = append(eachreaction,testSample)
		
		// pipette out
		solution = MixTo(OutPlate.Type,wellpositionarray[counter],platenum, testSample)
		
		perconditionuntowelllocationmap = append(perconditionuntowelllocationmap,wtype.LiquidTypeName(TestSols[k].Type) +":" + wellpositionarray[counter])
		
		// get annotation info
		doerun := wtype.LiquidTypeName(TestSols[k].Type)
		
		volume := TestSolVolumes[l].ToString() //strconv.Itoa(wutil.RoundInt(number))+"ul"
		
		solutionname := TestSols[k].CName
		
		description := volume+"_"+solutionname+"_replicate"+strconv.Itoa(j+1)+"_platenum"+strconv.Itoa(platenum)
		//setpoints := volume+"_"+solutionname+"_replicate"+strconv.Itoa(j+1)+"_platenum"+strconv.Itoa(platenum)
		
		// add run to well position lookup table 
		Runtowelllocationmap[doerun+"_"+description]= wellpositionarray[counter]
		reactions = append(reactions,solution)
	counter = counter + 1
	
	
	// add additional info for each run
	runs[i] = doe.AddAdditionalHeaderandValue(runs[i],"Additional","Location_"+ description, wellpositionarray[counter])
	
	// add run order:
	runs[i] = doe.AddAdditionalHeaderandValue(runs[i],"Additional","runorder_"+ description, counter)
	
	// add setpoint printout to double check correct match up:
	runs[i] = doe.AddAdditionalHeaderandValue(runs[i],"Additional","doerun"+ description, doerun)
	//runs[i].AddAdditionalValue("Replicate", strconv.Itoa(j+1))
	//runs[i].AddAdditionalValue("Solution name", TestSols[k].CName)
	//runs[i].AddAdditionalValue("Volume", strconv.Itoa(wutil.RoundInt(TestSolVolumes[l].RawValue()))+"ul)
	
	}
	
	
	// export DOE design file per set of conditions
	outputsandwich := strconv.Itoa(wutil.RoundInt(TestSolVolumes[l].RawValue()))+TestSols[k].CName+strconv.Itoa(j+1)
	
	outputfilename := filepath.Join(antha.Dirpath(),"DOE2"+ "_" + outputsandwich+ ".xlsx")
	
	Errors = append(Errors,doe.AddWelllocations(DXORJMP,filepath.Join(antha.Dirpath(), LHDOEFile),0,perconditionuntowelllocationmap,"DOE_run",outputfilename,[]string{"Volume","Solution","Replicate"}, []interface{}{TestSolVolumes[l].ToString(),TestSols[k].CName,string(j)}))
	
	// other things to add to check for covariance
	// order in which wells were pippetted
	// plate ID
	// row 
	// column
	// ambient temp 
	
	// empty
	perconditionuntowelllocationmap = make([]string,0)
	}
	}
	}
	
	
	// export overall DOE design file showing all well locations for all conditions
	_ = doe.JMPXLSXFilefromRuns(runs,OutputFilename)
	
	// add blanks after
	
	for n := 0; n <platenum; n++ {
	for m := 0; m< NumberofBlanks; m++ {
	//eachreaction := make([]*wtype.LHComponent, 0)
		
		// use defualt policy for blank
		
		bufferSample := mixer.Sample(Diluent, TotalVolume)
		//eachreaction = append(eachreaction,bufferSample)
		
		
		// add blanks to last column of plate
		well := alphabet[OutPlate.WlsY-1-m]+strconv.Itoa(OutPlate.WlsX)
		fmt.Println("blankwell", well)
		reaction := MixTo(OutPlate.Type,well, n+1,bufferSample)
		//fmt.Println("where am I?",wellpositionarray[counter])
		Runtowelllocationmap["Blank"+ strconv.Itoa(m+1)+" platenum"+strconv.Itoa(n+1)] = well
		
		Blankwells = append(Blankwells,well)
	
		reactions = append(reactions,reaction)
	counter = counter + 1
	
	}
	
	}
	
	Reactions = reactions
	Runcount = len(Reactions)
	Pixelcount = len(wellpositionarray)
	Runs = runs
	
}

// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {
}
