protocol TypeIISConstructAssemblyMMX_forscreen

import (
	"github.com/antha-lang/antha/antha/anthalib/mixer"
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"fmt"
)

// Input parameters for this protocol (data)
Parameters (
	ReactionVolume				Volume
	MasterMixVolume				Volume
	PartVols				[]Volume
	PartNames				[]string
	ReactionTemp				Temperature
	ReactionTime				Time
	InactivationTemp			Temperature
	InactivationTime			Time
	OutputReactionName			string
	OutputLocation 				string
	OutputPlateNum				int
	LHPolicyName				string
)

// Physical Inputs to this protocol with types
Inputs (
	Parts			[]*wtype.LHComponent
	MasterMix		*wtype.LHComponent
	OutPlate		*wtype.LHPlate
	Water *wtype.LHComponent
)


// Physical outputs from this protocol with types
Outputs (
	Reaction *wtype.LHComponent
)

// Data which is returned from this protocol, and data types
Data (
	Errors []error
)

Requirements {}

// Conditions to run on startup
Setup {}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {
	
	Errors = make([]error,0)
	var err error
	
	samples := make([]*wtype.LHComponent, 0)
	
	waterSample:=mixer.SampleForTotalVolume(Water,ReactionVolume)
	samples = append(samples, waterSample)
	
	mmxSample:=mixer.Sample(MasterMix,MasterMixVolume)
	samples = append(samples, mmxSample)

	for k, part := range Parts {
		fmt.Println("creating dna part num ", k, " comp ", part.CName, " renamed to ", PartNames[k], " vol ", PartVols[k])
		
		part.Type, err = wtype.LiquidTypeFromString(LHPolicyName)
		
		if err != nil {
			Errors = append(Errors,err)
		}
		
		partSample := mixer.Sample(part, PartVols[k])
		partSample.CName = PartNames[k]
		samples = append(samples, partSample)
	}

	// ensure the last step is mixed
	samples[len(samples)-1].Type=wtype.LTDNAMIX
	Reaction = MixTo(OutPlate.Type, OutputLocation, OutputPlateNum, samples...)

	// incubate the reaction mixture
	// commented out pending changes to incubate
	Incubate(Reaction, ReactionTemp, ReactionTime, false)
	// inactivate
	//Incubate(Reaction, InactivationTemp, InactivationTime, false)
}

// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {
}
