// This protocol is intended to design assembly parts using a specified enzyme. 
// overhangs are added to complement the adjacent parts and leave no scar. 
// parts can be entered as genbank (.gb) files, sequences or biobrick IDs
// If assembly simulation fails after overhangs are added. In order to help the user
// diagnose the reason, a report of the part overhangs 
// is returned to the user along with a list of cut sites in each part.

protocol Scarfree_siteremove_orfcheck

import (
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"fmt"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/enzymes"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/Parser"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/sequences"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/enzymes/lookup"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/igem"
	"strconv"
	"strings"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/text"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/AnthaPath"


)

// Input parameters for this protocol (data)
Parameters (
	Constructname 			string
	Seqsinorder				[]string
	Vector					string
	Enzymename				string
	ORFstoConfirm			[]string // enter each as amino acid sequence
	RemoveproblemRestrictionSites bool
)

// Physical Inputs to this protocol with types
Inputs (

)

// Physical outputs from this protocol with types
Outputs (
	
)

// Data which is returned from this protocol, and data types
Data (
	Warnings error
	Status string
	Simulationpass bool
	PartswithOverhangs []wtype.DNASequence // parts to order
	NewDNASequence wtype.DNASequence // desired sequence to end up with after assembly
	ORFmissing bool
)
// Input Requirement specification
Requirements {
	// e.g. are MoClo types valid?
}

// Conditions to run on startup
Setup {}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {
	//var msg string
	// set warnings reported back to user to none initially
	warnings := make([]string, 0)

	var warning string
	var err error
	// make an empty array of DNA Sequences ready to fill
	partsinorder := make([]wtype.DNASequence, 0)

	var partDNA wtype.DNASequence

	Status = "all parts available"
	for i, part := range Seqsinorder {
		if strings.Contains(part, ".gb") && strings.Contains(part, "Feature:") {

			split := strings.SplitAfter(part, ".gb")
			file := split[0]

			split2 := strings.Split(split[1], ":")
			feature := split2[1]

			partDNA, _ = parser.GenbankFeaturetoDNASequence(file, feature)
		} else if strings.Contains(part, ".gb") {

			/*annotated,_ := parser.GenbanktoAnnotatedSeq(part)
			partDNA = annotated.DNASequence */

			partDNA, _ = parser.GenbanktoDNASequence(part)
		} else {

			if strings.Contains(part, "BBa_") {
				part = igem.GetSequence(part)
			}
			partDNA = wtype.MakeLinearDNASequence("Part "+strconv.Itoa(i), part)
		}
		partsinorder = append(partsinorder, partDNA)
	}
	// check parts for restriction sites first and remove if the user has chosen to
	enz := lookup.EnzymeLookup(Enzymename)

	warning = text.Print("RemoveproblemRestrictionSites =", RemoveproblemRestrictionSites)
	warnings = append(warnings, warning)
	if RemoveproblemRestrictionSites {
		newparts := make([]wtype.DNASequence, 0)
		warning = "Starting process or removing restrictionsite"
		warnings = append(warnings, warning)

		for _, part := range partsinorder {
			fmt.Println("PARRRTS:", part)
			info := enzymes.Restrictionsitefinder(part, []wtype.LogicalRestrictionEnzyme{enz})

			for _, anysites := range info {
				if anysites.Sitefound {
					warning = "problem site found in " + part.Nm
					warnings = append(warnings, warning)
					orf, orftrue := sequences.FindBiggestORF(part.Seq)
					warning = fmt.Sprintln("site found in orf ", part.Nm, " ", orftrue, " site positions ", anysites.Positions("ALL"), "orf between", orf.StartPosition, " and ", orf.EndPosition, /*orf.DNASeq[orf.StartPosition:orf.EndPosition]*/)
					warnings = append(warnings, warning)
					if orftrue /* && len(orf.ProtSeq) > 20 */ {
						allsitestoavoid := make([]string, 0)
						allsitestoavoid = append(allsitestoavoid, anysites.Recognitionsequence, sequences.RevComp(anysites.Recognitionsequence))
						orfcoordinates := sequences.MakeStartendPair(orf.StartPosition, orf.EndPosition)
						for _, position := range anysites.Positions("ALL") {
							if orf.StartPosition < position && position < orf.EndPosition {
								originalcodon := ""
								codonoption := ""
								part, originalcodon, codonoption, err = sequences.ReplaceCodoninORF(part, orfcoordinates, position, allsitestoavoid)
								warning = fmt.Sprintln("sites to avoid: ", allsitestoavoid[0], allsitestoavoid[1])
								warnings = append(warnings, warning)
								warnings = append(warnings, "Paaaaerrttseq: "+part.Seq+"position: "+strconv.Itoa(position)+" original: "+originalcodon+" replacementcodon: "+codonoption)
								if err != nil {
									warning := text.Print("removal of site from orf "+orf.DNASeq, " failed! improve your algorithm! "+err.Error())
									warnings = append(warnings, warning)
								}
							} else {
								allsitestoavoid := make([]string, 0)
								part, err = sequences.RemoveSite(part, anysites.Enzyme, allsitestoavoid)
								if err != nil {

									warning = text.Print("position found to be outside of orf: "+orf.DNASeq, " failed! improve your algorithm! "+err.Error())
									warnings = append(warnings, warning)
								}
							}
						}
					} else {
						allsitestoavoid := make([]string, 0)
						temppart, err := sequences.RemoveSite(part, anysites.Enzyme, allsitestoavoid)
						fmt.Println("part= ", part)
						fmt.Println("temppart= ", temppart)
						if err != nil {
							warning := text.Print("removal of site failed! improve your algorithm!", err.Error())
							warnings = append(warnings, warning)

						}
						warning = fmt.Sprintln("modified "+temppart.Nm+"new seq: ", temppart.Seq)
						warnings = append(warnings, warning)
						part = temppart

						//	}
					}
				}
				//part.Seq = ""
				newparts = append(newparts, part)

				partsinorder = newparts
			}
		}
	}
	// make vector into an antha type DNASequence
	vectordata := wtype.MakePlasmidDNASequence("Vector", Vector)

	//lookup restriction enzyme
	restrictionenzyme, err := lookup.TypeIIsLookup(Enzymename)
	if err != nil {
		warnings = append(warnings, text.Print("Error", err.Error()))
	}

	//  Add overhangs for scarfree assembly based on part seqeunces only, i.e. no Assembly standard
	fmt.Println("warnings:", warnings)
	PartswithOverhangs = enzymes.MakeScarfreeCustomTypeIIsassemblyParts(partsinorder, vectordata, restrictionenzyme)

	// Check that assembly is feasible with designed parts by simulating assembly of the sequences with the chosen enzyme
	assembly := enzymes.Assemblyparameters{Constructname, restrictionenzyme.Name, vectordata, PartswithOverhangs}
	status, numberofassemblies, _, newDNASequence, err := enzymes.Assemblysimulator(assembly)

	endreport := "Endreport only run in the event of assembly simulation failure"
	//sites := "Restriction mapper only run in the event of assembly simulation failure"
	NewDNASequence = newDNASequence
	if err == nil && numberofassemblies == 1 {

		Simulationpass = true
	} else {

		warnings = append(warnings, status)
		// perform mock digest to test fragement overhangs (fragments are hidden by using _, )
		_, stickyends5, stickyends3 := enzymes.TypeIIsdigest(vectordata, restrictionenzyme)

		allends := make([]string, 0)
		ends := ""

		ends = text.Print(vectordata.Nm+" 5 Prime end: ", stickyends5)
		allends = append(allends, ends)
		ends = text.Print(vectordata.Nm+" 3 Prime end: ", stickyends3)
		allends = append(allends, ends)

		for _, part := range PartswithOverhangs {
			_, stickyends5, stickyends3 := enzymes.TypeIIsdigest(part, restrictionenzyme)
			ends = text.Print(part.Nm+" 5 Prime end: ", stickyends5)
			allends = append(allends, ends)
			ends = text.Print(part.Nm+" 3 Prime end: ", stickyends3)
			allends = append(allends, ends)
		}
		endreport = strings.Join(allends, " ")
		warnings = append(warnings, endreport)
	}

	// check number of sites per part !

	sites := make([]int, 0)
	multiple := make([]string, 0)
	for _, part := range PartswithOverhangs {

		info := enzymes.Restrictionsitefinder(part, []wtype.LogicalRestrictionEnzyme{enz})

		sitepositions := enzymes.SitepositionString(info[0])

		sites = append(sites, info[0].Numberofsites)
		sitepositions = text.Print(part.Nm+" "+Enzymename+" positions:", sitepositions)
		multiple = append(multiple, sitepositions)
	}

	for _, orf := range ORFstoConfirm {
		if sequences.LookforSpecificORF(NewDNASequence.Seq, orf) == false {
			warning = text.Print("orf not present: ", orf)
			warnings = append(warnings, warning)
			ORFmissing = true
		}
	}

	if len(warnings) == 0 {
		warnings = append(warnings, "none")
	}
	Warnings = fmt.Errorf(strings.Join(warnings, ";"))

	partsummary := make([]string, 0)
	for _, part := range PartswithOverhangs {
		partsummary = append(partsummary, text.Print(part.Nm, part.Seq))
	}

	partstoorder := text.Print("PartswithOverhangs: ", partsummary)

	// Print status
	if Status != "all parts available"{
		Status = fmt.Sprintln(Status)
	} else {Status = fmt.Sprintln(
		text.Print("simulator status: ", status),
		text.Print("Endreport after digestion: ",endreport),
		text.Print("Sites per part for " + Enzymename, sites),
		text.Print("Positions: ", multiple),
		text.Print("Warnings:", Warnings.Error()),
		text.Print("Simulationpass=", Simulationpass),
		text.Print("NewDNASequence: ",NewDNASequence),
		text.Print("Any Orfs to confirm missing from new DNA sequence:", ORFmissing),
		partstoorder,
		)
		// export data to file
		anthapath.ExporttoFile("Report"+"_"+Constructname+".txt",[]byte(Status))
	//anthapath.ExportTextFile("Report"+"_"+Constructname+".txt",Status)

	}
	
}

// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {
}
